PsychoPy2experiment version="2020.1.2"
Settings
  Data filename = $os.path.relpath(os.path.join(os.path.expanduser('~'), 'Dropbox (PfeiBer Lab)', 'Devaluation', 'Tasks', 'SST_DEV', 'output', expName + expInfo['participant'] + '_run' + expInfo['session'] + '_' + data.getDateStr(format='%d-%b-%Y_%H-%M')))
  Experiment info = {'participant': '999', 'session': '1', 'run_number': '1'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  color = $[-0.059,-0.059,-0.059]
  expName = DEV
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Routines
  Routine trial
    ImageComponent image_stimulus
      durationEstim = 2
      image [set every repeat] = $image_file
      mask = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [condition] = $key_resp.status == FINISHED
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    PolygonComponent circle_border
      durationEstim = 2
      lineColor [set every repeat] = $color
      lineWidth = 10
      nVertices = 200
      saveStartStop = False
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [condition] = $key_resp.status == FINISHED
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    ImageComponent arrow_image
      durationEstim = 1
      image [set every repeat] = $os.path.join('stimuli', 'arrows', arrow)
      startEstim = 1
      startVal [time (s)] = $jitter_duration + 0.5
      stopVal [condition] = $key_resp.status == FINISHED
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    SoundComponent stop_signal_sound
      sound = 880
      startEstim = 1.25
      startVal [time (s)] = $staircase[staircase_number] + 1
      stopVal [duration (s)] = 0.25
      volume [set every repeat] = sound_volume
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    KeyboardComponent key_resp
      durationEstim = 1
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1
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    CodeComponent staircase_adjustment
      Code Type = Py
      Begin Routine:
        #
        # Custom code to emit sound on 'nogo' trials
        #
        if trial_type == 'nogo':
            sound_volume = 1
        else:
            sound_volume = 0

        # Set the volume for the sound component, so it updates after the sound_volume has been determined
        stop_signal_sound.setVolume(sound_volume, log=False)


        # Setup the initial arrow image
        if trials.thisN == 0:
            arrow = f'{arrow_direction}_arrow1.png'
      End Routine:
        #
        # Custom code to update staircases
        #
        response = key_resp.keys
        step_size = 0.50

        # If there is any kind of response in the no-go trials, decrease the stop signal delay (make the sound buzz sooner)
        # If there is not a response, increase the delay.
        if trial_type == 'nogo':
            if response:
                if staircase[staircase_number] >= step_size:
                    staircase[staircase_number] = staircase[staircase_number] - step_size
            else:
                staircase[staircase_number] = staircase[staircase_number] + step_size

        high_threshold = 0.75
        low_threshold = 0.5

        if isinstance(key_resp.rt, list):
            response_time = 0.0
        else:
            response_time = key_resp.rt

        if response_time > high_threshold:
            color = red
            arrow = f'{arrow_direction}_arrow3.png'
        elif response_time > low_threshold:
            color = orange
            arrow = f'{arrow_direction}_arrow2.png'
        else:
            color = white
            arrow = f'{arrow_direction}_arrow1.png'
  Routine setup
    CodeComponent setup_code
      Code Type = Py
      Begin Experiment:
        #
        # Custom code to set up conditions files
        #
        import glob
        import os
        import re
        from operator import itemgetter

        from numpy.random import shuffle
        from scipy.io import loadmat
        from typing import List


        def is_mri_session(session: str) -> bool:
            return session == '1' or session == '2'


        def read_image_selection_output(participant: str) -> List[List]:
            # read subject's category ratings file
            image_selection_output = os.path.join(os.path.expanduser('~'), 'Dropbox (PfeiBer Lab)', 'Devaluation', 'Tasks',
                                                  'ImageSelection', 'output', 'Categorized',
                                                  'DEV' + participant + '_ratings.csv')
            image_selection = []
            with open(image_selection_output) as f:
                for line in f:
                    rating, category, file_name = line.strip().split(',')
                    # Drop all the non-craved category images
                    if category != '0':
                        image_selection.append([rating, category, file_name])

            return image_selection


        def read_trialcode_matfile(participant: str, session: str):
            # Read the participant and session specific file describing each trial:
            # trial_type (0=Go, 1=NoGo, 2=null),
            # duration of cue (add jitter to Go and NoGo trials),
            # trial_start_time the trial should begin,
            # arrow_type (0=left, 1=right, 2=no arrow),
            # ladder_number (1 or 2, 0=no ladder),
            # stimulus_type (1=healthy, 0=unhealthy, 2=null)
            trialcode_file = 's' + str(int(participant)) + 'r' + str(int(session)) + '_UvH.mat'
            matfile_contents = loadmat(os.path.join('input', 'ladderFiles', trialcode_file))
            trialcode = matfile_contents['trialcode']
            temp_trial_type = trialcode[..., 0]
            trial_type = ['go' if a == 0 else 'nogo' for a in temp_trial_type]
            duration = trialcode[..., 1]
            trial_start_time = trialcode[..., 2]
            temp_arrow_type = trialcode[..., 3]
            arrow_type = ['L' if a == 0 else 'R' for a in temp_arrow_type]
            ladder_number = trialcode[..., 4].astype(int)
            stimulus_type = trialcode[..., 5]

            return trial_type, duration, trial_start_time, arrow_type, ladder_number, stimulus_type


        def read_jitter() -> List[float]:
            jitter_path = os.path.join('input', 'jitter.txt')
            with open(jitter_path) as f:
                lines = f.readlines()
                jitter = [float(j) for j in lines]
            return jitter


        participant = expInfo['participant']
        session = expInfo['session']
        run_number = expInfo['run_number']

        # Create some variables needed later
        orange = (1, 0, -1)
        red = (1, -1, -1)
        white = (1, 1, 1)
        color = white
        arrow = 'L_arrow1.png'
        sound_volume = 1
        staircase = {1: 0.250, 2: 0.350, 0: 0.0}

        # Read the jitter
        jitter = read_jitter()

        image_selection = read_image_selection_output(participant)

        # image_selection output is a CSV file with three fields: rating, image category, image file name.
        # Image categories 1, 2, 3 are craved foods. Image category 0 is not craved.
        # Reverse sort by rating to get highest rated images of craved foods first.
        image_selection.sort(key=itemgetter(0), reverse=True)

        num_trials = 64
        # If there aren't enough images, add copies of the images until there are enough.
        if len(image_selection) < num_trials:
            shuffle(image_selection)
            num_copies = num_trials // len(image_selection) + 1
            image_selection = (image_selection * num_copies)
        # then just slice off the desired number of images
        image_selection = image_selection[:num_trials]
        shuffle(image_selection)

        unhealthy_images = []
        for _, _, image_name in image_selection:
            pattern = r'\A\D+'
            result = re.match(pattern, image_name)
            category_name = result.group()

            unhealthy_images.append(os.path.join('stimuli', 'CategorizedImages', 'Unhealthy', category_name, image_name))

        # Get the healthy images
        healthy_images = glob.glob(os.path.relpath(os.path.join('stimuli', 'CategorizedImages', 'Healthy', '**jpg')))
        shuffle(healthy_images)
        healthy_images = healthy_images[:num_trials]

        trial_type, duration, trial_start_time, arrow_type, ladder_number, stimulus_type = read_trialcode_matfile(participant, session)

        with open('conditions.csv', mode='w') as f:
            f.write('trial_type,stimulus_type,arrow_direction,staircase_number,image_file,null_duration,jitter_duration\n')
            healthy_index = 0
            unhealthy_index = 0
            for i in range(0, len(trial_type), 2):
                null_duration = duration[i + 1]
                if stimulus_type[i] == 0:
                    image_file = unhealthy_images[unhealthy_index]
                    unhealthy_index += 1
                    stimulus = 'unhealthy'
                elif stimulus_type[i] == 1:
                    image_file = healthy_images[healthy_index]
                    healthy_index += 1
                    stimulus = 'healthy'
                else:
                    raise ValueError('Invalid stimulus type')

                f.write(f'{trial_type[i]},{stimulus},{arrow_type[i]},{ladder_number[i]},{image_file},{null_duration},{jitter[i // 2]}\n')
  Routine instructions
    CodeComponent set_start_text
      Code Type = Py
      Begin Experiment:
        #
        # Display different start text / instructions for behavioral sessions compared with MRI scan sessions.
        session = expInfo['session']
        if is_mri_session(session):
            start_text_str = 'Scanner calibrating.\nPlease hold VERY still.'
        else:
            start_text_str = 'Press the left button (LEFT index finger) if you see <\n' \
                             'Press the right button (RIGHT index finger) if you see >\n' \
                             'Press the button as QUICKLY and as ACCURATELY\n' \
                             'as you can when you see the arrow.\n' \
                             'But if you hear a beep, try very hard to STOP\n' \
                             'yourself from pressing the button on that arrow only.\n' \
                             'GOING and STOPPING are equally important.\n' \
                             'So DO NOT slow down your response to wait for the beep,\n' \
                             'because then you are no longer going when you are supposed to.\n' \
                             'You won''t always be able to stop when you hear a beep,\n' \
                             'but as long as you go quickly all of the time\n' \
                             '(while pushing the correct button for arrow direction),\n' \
                             'and can stop some of the time, you are doing the task correctly.\n' \
                             'Ask the experimenter if you have any questions.\n' \
                             'Press any key to go on.\n'
    TextComponent start_text
      durationEstim = 3
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $start_text_str
      wrapWidth = 1
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    KeyboardComponent start_trigger
      durationEstim = 3
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    TextComponent end_text
      durationEstim = 1
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Great Job. Thank you!
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  Routine intertrial
    StaticComponent ISI
      durationEstim = 1.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $null_duration
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Flow
  Routine setup
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('trial_type', 'nogo'), ('stimulus_type', 'unhealthy'), ('arrow_direction', 'R'), ('ladder_number', 1), ('image_file', 'stimuli/CategorizedImages/Unhealthy/Barbeque/Barbeque12.jpg'), ('null_duration', 0.5)]),
      OrderedDict([('trial_type', 'go'), ('stimulus_type', 'unhealthy'), ('arrow_direction', 'R'), ('ladder_number', 0), ('image_file', 'stimuli/CategorizedImages/Unhealthy/Chocolate/Chocolate03.jpg'), ('null_duration', 0.75)]),
      OrderedDict([('trial_type', 'go'), ('stimulus_type', 'healthy'), ('arrow_direction', 'L'), ('ladder_number', 0), ('image_file', 'stimuli/CategorizedImages/Healthy/healthy52.jpg'), ('null_duration', 1.25)]),
      OrderedDict([('trial_type', 'go'), ('stimulus_type', 'unhealthy'), ('arrow_direction', 'R'), ('ladder_number', 0), ('image_file', 'stimuli/CategorizedImages/Unhealthy/Candy/Candy04.jpg'), ('null_duration', 1.5)]),
      OrderedDict([('trial_type', 'go'), ('stimulus_type', 'healthy'), ('arrow_direction', 'R'), ('ladder_number', 0), ('image_file', 'stimuli/CategorizedImages/Healthy/healthy115.jpg'), ('null_duration', 1.25)]),
      OrderedDict([('trial_type', 'go'), ('stimulus_type', 'healthy'), ('arrow_direction', 'L'), ('ladder_number', 0), ('image_file', 'stimuli/CategorizedImages/Healthy/healthy111.jpg'), ('null_duration', 0.5)]),
      OrderedDict([('trial_type', 'go'), ('stimulus_type', 'healthy'), ('arrow_direction', 'L'), ('ladder_number', 0), ('image_file', 'stimuli/CategorizedImages/Healthy/healthy83.jpg'), ('null_duration', 0.5)])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
    Routine trial
    Routine intertrial
  LoopTerminator trials
  Routine end
